CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "text", "ChannelName": "text", "ChannelNumber": "text", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "integer", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "integer", "Timepoint": "integer", "Well": "text", "Z": "text", "time": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_s(?P<Site>[0-9]{1,3})t(?P<time>[0-9]{1,3})c(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Clover': 'Site', 'Nuc': 'Site', 'mScarlet': 'Site', 'FarRed': 'Site'}, {'Clover': 'time', 'Nuc': 'time', 'mScarlet': 'time', 'FarRed': 'time'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:mScarlet
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Clover
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_Simple")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "0") (file doesnot contain "_Simple")
    Name to assign these images:FarRed
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:10000
    Add to result:-9999
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:NucInv
    Image or measurement?:Image
    Select the first image:Nuc
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:NucInv
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.75
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nuclei
    Name the objects to be identified:CloverCell
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Clover
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:nuclei
    Name the objects to be identified:mScarletCell
    Select the method to identify the secondary objects:Distance - B
    Select the input image:mScarlet
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:nuclei
    Name the output image:NucMask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:CloverCell
    Name the output image:CloverCell
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:mScarletCell
    Name the output image:mScarletCell
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:12|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:RedGreenOverlay
    Image or measurement?:Image
    Select the first image:mScarletCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CloverCell
    Multiply the second image by:1.0
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucMask
    Select method for constructing file names:Single name
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    Enter single file name:H200911_s\g<Site>_c3_t\g<time>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Site>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:RedGreenOverlay
    Select method for constructing file names:Single name
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    Enter single file name:H200911_s\g<Site>_c4_t\g<time>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Site>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:FarRed
    Select method for constructing file names:Single name
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    Enter single file name:H200911_s\g<Site>_c0_t\g<time>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Site>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:mScarlet
    Select method for constructing file names:Single name
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    Enter single file name:H200911_s\g<Site>_c1_t\g<time>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Site>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Clover
    Select method for constructing file names:Single name
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    Enter single file name:H200911_s\g<Site>_c2_t\g<time>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Site>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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